'CR800 Series Datalogger

'For programming tips, copy this address to your browser
'search window:https://www.campbellsci.com/videos/datalogger-programming
'To create a different opening program template, type in new
'instructions and select Template | Save as Default Template
'date:
'program author:

'Declare Constants
'Example:
'CONST PI = 3.141592654 or Const PI = 4*ATN(1)

'Declare Public Variables
'Example:
Public PTemp, batt_volt

'Declare Private Variables
'Example:
'Dim Counter
Public dif_1_mv
Public se_3_mv

'Define Data Tables.
DataTable (Test,1,-1) 'Set table size to # of records, or -1 to autoallocate.
	DataInterval (0,15,Sec,10)
	Minimum (1,batt_volt,FP2,False,False)
	Sample (1,PTemp,FP2)
  Sample (1,dif_1_mv,FP2)
  Sample (1,se_3_mv,FP2)	
EndTable

'Define Subroutines
'Sub
	'EnterSub instructions here
'EndSub

'Main Program
BeginProg
	Scan (1,Sec,0,0)
		PanelTemp (PTemp,60)
		Battery (batt_volt)
		'Enter other measurement instructions
		'Call Output Tables
		

VoltDiff (dif_1_mv,1,mV2500,1,True ,0,250,1.0,0)
     VoltSe (se_3_mv,1,mV5000,3,1,0,250,1.0,0)
		'Example:
		CallTable Test
	NextScan
EndProg

